PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 4FreqSeperateForDataCollection
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine routine_7_Hz
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    PolygonComponent circle
      fillColor = $(1.0000, -1.0000, -1.0000)
      opacity [set every frame] = circOpacity1
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 5
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        circOpacity1 = 1.0
      Begin Routine:
        outlet.push_sample(['7Hz_Start'])
      Each Frame:
        flickerHz = 7
        refreshRate = 60  # your monitor's rate
        framesPerCycle = int(round(refreshRate / flickerHz))

        if (routineTimer.getTime() * refreshRate % framesPerCycle) < framesPerCycle / 2:
            circOpacity1 = 1.0
        else:
            circOpacity1 = 0.0
      End Routine:
        outlet.push_sample(['7Hz_End'])
  Routine routine_9_Hz
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    PolygonComponent circle2
      fillColor = $(1.0000, -1.0000, -1.0000)
      opacity [set every frame] = circOpacity2
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [time (s)] = 5
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        circOpacity2 = 1.0
      Begin Routine:
        outlet.push_sample(['9Hz_Start'])
      Each Frame:
        flickerHz = 9
        refreshRate = 60  # your monitor's rate
        framesPerCycle = int(round(refreshRate / flickerHz))

        if (routineTimer.getTime() * refreshRate % framesPerCycle) < framesPerCycle / 2:
            circOpacity2 = 1.0
        else:
            circOpacity2 = 0.0
      End Routine:
        outlet.push_sample(['9Hz_End'])
  Routine routine_13_Hz
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    PolygonComponent circle3
      fillColor = $(1.0000, -1.0000, -1.0000)
      opacity [set every frame] = circOpacity3
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [time (s)] = 5
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        circOpacity3 = 1.0
      Begin Routine:
        outlet.push_sample(['13Hz_Start'])
      Each Frame:
        flickerHz = 13
        refreshRate = 60  # your monitor's rate
        framesPerCycle = int(round(refreshRate / flickerHz))

        if (routineTimer.getTime() * refreshRate % framesPerCycle) < framesPerCycle / 2:
            circOpacity3 = 1.0
        else:
            circOpacity3 = 0.0
      End Routine:
        outlet.push_sample(['13Hz_End'])
  Routine routine_17_Hz
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    PolygonComponent circle4
      fillColor = $(1.0000, -1.0000, -1.0000)
      opacity [set every frame] = circOpacity4
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [time (s)] = 5
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        circOpacity4 = 1.0
      Begin Routine:
        outlet.push_sample(['17Hz_Start'])
      Each Frame:
        flickerHz = 17
        refreshRate = 60  # your monitor's rate
        framesPerCycle = int(round(refreshRate / flickerHz))

        if (routineTimer.getTime() * refreshRate % framesPerCycle) < framesPerCycle / 2:
            circOpacity4 = 1.0
        else:
            circOpacity4 = 0.0
      End Routine:
        outlet.push_sample(['17Hz_End'])
  Routine welcome_screen
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet

        # Create stream info for markers
        # Name: 'PsychoPyMarkers', Type: 'Markers', 1 channel, Irregular rate (0), String data
        info = StreamInfo('PsychoPyMarkers', 'Markers', 1, 0, 'string', 'psycho_flicker_001')
        outlet = StreamOutlet(info)
  Routine pause2
    RoutineSettingsComponent pause2
      stopVal [duration (s)] = 2
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  Routine pause10
    RoutineSettingsComponent pause10
      stopVal [duration (s)] = 10
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Flow
  Routine welcome_screen
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine routine_7_Hz
      Routine pause2
      Routine routine_9_Hz
      Routine pause2
      Routine routine_13_Hz
      Routine pause2
      Routine routine_17_Hz
      Routine pause2
    LoopTerminator trials
    Routine pause10
  LoopTerminator trials_2
